PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['Tracks/AngerTrack.mp3', 'Tracks/DisgustTrack.mp3', 'Tracks/FearTrack.mp3', 'Tracks/HappyTrack.mp3', 'Tracks/SadTrack.mp3', 'Tracks/SurpriseTrack.mp3']
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Music Emotion Task
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    SoundComponent Track1
      forceEndRoutine = True
      sound [set every repeat] = $Songs
      startVal [time (s)] = 0.1
      volume [set every repeat] = 1
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        songNumber = str(trials.thisN + 1)  # thisN = trial index starting at 0
        SongTxt = "Track " + songNumber
    TextComponent Anytext
      letterHeight = 0.05
      startVal [condition] = Welcomekey.keys  == 'space'
      stopVal [condition] = Track1.status == FINISHED
      text [set every repeat] = $SongTxt
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  Routine Likert_1
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    SliderComponent Likert1
      color = -1.0000, -1.0000, -1.0000
      fillColor = -1.0000, -1.0000, -1.0000
      font = Noto Sans
      forceEndRoutine = False
      granularity = 0
      labels = "Happy", "Sad", "Anger", "Fear", "Disgust", "Surprise"
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (1.2, 0.1)
      startVal [time (s)] = 0.0
      stopVal [condition] = $Likert1.getRating() != null
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent Likert1txt
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [condition] = $Likert1.getRating() != null
      text = Please indicate which emotion among these six best describes the feeling conveyed by the track.
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    SliderComponent Likert2
      color = 1.0000, 1.0000, 1.0000
      fillColor = -1.0000, -1.0000, -1.0000
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = "1", "2", "3", "4", "5"
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (1.2, 0.1)
      startVal [condition] = $Likert1.getRating() != null
      stopVal [condition] = $Likert2.getRating() != null
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent Likert2txt
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [condition] = $Likert1.getRating() != null
      stopVal [condition] = $Likert2.getRating() != null
      text = Indicate on this scale on the intensity of the emotion:
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    TextComponent NextTxt
      letterHeight = 0.05
      startVal [condition] = Likert2.getRating() != null
      stopVal [condition] = NextRes.keys=='space'
      text = Press SPACEBAR to proceed...
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    KeyboardComponent NextRes
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [condition] = $Likert2.getRating() != null
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  Routine Audio
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import sounddevice as sd
        print (sd.query_devices())
        output_device_index = 3
        sd.default.device = (None, output_device_index)
  Routine WelcomeScreen
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    TextComponent Welcometxt
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [condition] = Welcomekey.keys == 'space'
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      text:
        Welcome, and thank you for your participation in this study!


        In this task, you will be presented with 6 short instrumental music clips. Each clip will play for approximately 15 seconds.

        After listening to each clip, you will be asked to respond to two simple questions regarding your experience of the music. There are no right or wrong answers. We are interested in your personal impressions.

         Please press SPACEBAR to begin with Track 1.
    KeyboardComponent Welcomekey
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine Goodbye
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    TextComponent ThankYou
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      text = Thank you for participating!
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Flow
  Routine WelcomeScreen
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ExcelTracks.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Songs': 'Tracks/AngerTrack.mp3'},
      {'Songs': 'Tracks/SadTrack.mp3'},
      {'Songs': 'Tracks/HappyTrack.mp3'},
      {'Songs': 'Tracks/DisgustTrack.mp3'},
      {'Songs': 'Tracks/FearTrack.mp3'},
      {'Songs': 'Tracks/SurpriseTrack.mp3'}]
    Routine trial
    Routine Likert_1
  LoopTerminator trials
  Routine Goodbye
